
includeFile = ../Configurations/ConfNoIC.txt

###################################################### Pdd WaterPhantom #####################################################

s:Sc/DoseAtWaterPhantom/Quantity                  = "DoseToMedium"
s:Sc/DoseAtWaterPhantom/Component                 = "WaterPhantom"
s:Sc/DoseAtWaterPhantom/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseAtWaterPhantom/OutputType                = "Csv"
s:Sc/DoseAtWaterPhantom/OutputFile                = "DoseAtWaterPhantom"
i:Sc/DoseAtWaterPhantom/XBins                     = 100
i:Sc/DoseAtWaterPhantom/YBins                     = 100
i:Sc/DoseAtWaterPhantom/ZBins                     = 100


###################################################### Energy Fluence WaterPhantom #####################################################

s:Sc/EnergyFluenceAtWaterPhantom/Quantity                  = "EnergyFluence"
s:Sc/EnergyFluenceAtWaterPhantom/Component                 = "WaterPhantom"
s:Sc/EnergyFluenceAtWaterPhantom/IfOutputFileAlreadyExists = "Increment"
s:Sc/EnergyFluenceAtWaterPhantom/OutputType                = "Csv"
s:Sc/EnergyFluenceAtWaterPhantom/OutputFile                = "EnergyFluenceAtWaterPhantom"
i:Sc/EnergyFluenceAtWaterPhantom/XBins                     = 100
i:Sc/EnergyFluenceAtWaterPhantom/YBins                     = 100


################################################# Scorer Energy Dep Spec ###############################################

s:Sc/EnergyDepAtWaterPhantom/Component        = "WaterPhantom"
s:Sc/EnergyDepAtWaterPhantom/OutputFile       = "EnergyDepSpec"
s:Sc/EnergyDepAtWaterPhantom/Quantity         = "EnergyDeposit"
s:Sc/EnergyDepAtWaterPhantom/OutputType       = "Csv"
i:Sc/EnergyDepAtWaterPhantom/EBins            = 100
d:Sc/EnergyDepAtWaterPhantom/EBinMin          = 0. MeV
d:Sc/EnergyDepAtWaterPhantom/EBinMax          = 15. MeV